---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Digit Span"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path None
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define form_text_input Answer
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Spróbuj odpamiętać wyświetlone cyfry"
	set form_question "Zapisz cyfry w wyświetlonej kolejności. Następnie naciśnij ENTER aby kontynuować"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad ISI_1
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_2
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_3
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_4
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_5
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_6
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_7
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_8
	set duration 445
	set description "Displays stimuli"

define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text DALEJ
	set margins "50;50;50;50"
	set form_title "Szanowny uczestniku,"
	__form_text__
	
	Zapraszamy do udziału w naszym badaniu naukowym dotyczącym pojemności pamięci roboczej.
	
	Jeśli zdecydujesz się wziąc udział, zostaniesz poproszony o wykonanie serii zadań polegających na odpamiętaniu wyświetlonych cyfr/liczb. Całe badanie powinno zająć około 15 minut. 
	
	Odpowiedzi zostaną zachowane w tajemnicy. Informujemy jednocześnie, że tożsamość uczestników nie jest zapisywana.
	
	Dostęp do wyników, będzie miał tylko zespół badawczy, a dane zebrane podczas badania zostaną wykorzystane w ramach pisania artykułu naukowego, który jest częścią pracy zaliczeniowej. Artykuł nie zostanie opublikowany w żadnym czasopiśmie.
	
	W razie jakichkolwiek pytań lub wątpliwości dotyczących badania, prosimy o kontakt z nami pod adresem: jakubkarp.kontakt@gmail.com.
	
	Dziękujemy za rozważnie udziału w naszym badaniu.
	
	Z poważaniem,
	
	zespół badawczy.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad Intro
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="W tym eksperymencie wyświetlane będą cyfry/liczby.<br /></br><br />Twoim zadaniem będzie zapamiętanie ich w wyświetlanej kolejności.<br />Po wpisaniu naciśnij ENTER, aby zatwierdzić i kontynuować.<br /></br><br /></br><br />Naciśnij SPACJA, aby rozpocząć.<br />" x=0.0 y=0.0 z_index=0

define sequence Trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run num_1 always
	run ISI_1 always
	run num_2 always
	run ISI_2 always
	run num_3 always
	run ISI_3 always
	run num_4 always
	run ISI_4 always
	run num_5 "[num5] = 1"
	run ISI_5 "[num5] = 1"
	run num_6 "[num6] = 1"
	run ISI_6 "[num6] = 1"
	run num_7 "[num7] = 1"
	run ISI_7 "[num7] = 1"
	run num_8 "[num8] = 1"
	run ISI_8 "[num8] = 1"
	run Answer always
	run logger always

define sketchpad end_of_experiment
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="<strong>Dziękujemy za udział w badaniu!</strong><br /></br><br /><br />Naciśnij dowolny klawisz, aby zakończyć.<br /><br />Jeżeli przycisk nie zostanie naciśnięty,<br /> eksperyment zakończy się samoistnie za 10 sekund." x=0 y=0 z_index=0

define keyboard_response end_of_experiment_keypress
	set timeout 10000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define keyboard_response end_of_experiment_keypress_1
	set timeout 0
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define sketchpad end_of_practice
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Koniec sekwencji testowej<br /></br><br /><br /><br /></br><br /></br><br />Naciśnij SPACJA, aby rozpocząć." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions always
	run form_consent always
	run form_age always
	run form_sex always
	run Intro always
	run introduction_start_keypress always
	run practice_information always
	run practice_start_keypress always
	run practice_loop always
	run end_of_practice always
	run experiment_information always
	run experiment_start_keypress always
	run experiment_loop always
	run experiment_explanation always
	run end_of_experiment_keypress_1 always
	run end_of_experiment always
	run end_of_experiment_keypress always

define sketchpad experiment_explanation
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Przeprowadzone badanie jest repliką eksperymentu magiczna liczba George'a Millera.<br />Eksperyment miał na celu okreśelenie liczby elementów, <br />które ludzie mogą zapamiętać w pamięci krótkotrwałej.<br />Miller twierdził, że średnia pojemność pamięci krótkotrwałej <br />wynosi około 7 elementów, plus-minus 2." x=0 y=0 z_index=0

define sketchpad experiment_information
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Część 2: część badawcza<br /></br><br />Udzielone odpowiedzi, będą częścią wyników.<br /><br /><br /></br><br /></br><br />Naciśnij SPACJA, aby rozpocząć." x=0 y=0 z_index=0

define loop experiment_loop
	set source_file "expTrial.csv"
	set source file
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run Trial_sequence

define keyboard_response experiment_start_keypress
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define form_multiple_choice form_age
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	18-23
	24-27
	28-32
	32-36
	37-41
	41+
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Wybierz swój przedział wiekowy"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define form_consent form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "<span size=24>Zgoda</span>"
	__form_text__
	Zaraz rozpoczniesz serię krótkich testów.
	
	Ten eksperyment nie niesie ze sobą ryzyka dla Twojego zdrowia.
	Dostęp do wyników, będzie miał tylko zespół badawczy, a dane zebrane podczas badania zostaną wykorzystane w ramach pisania artykułu naukowego, który jest częścią pracy zaliczeniowej. 
	Artykuł nie zostanie opublikowany w żadnym czasopiśmie.
	
	Po udzieleniu zgody na udział w badaniu poprosimy o wypełnienie metryczki zawierającej jedynie twój wiek oraz płeć. 
	Po zakończeniu badania otrzymasz także krótkie wyjaśnienie problemu, które to badanie porusza.
	
	Możesz przerwać udział w eksperymencie w dowolnym momencie, jeśli poczujesz się nieswojo.
	__end__
	set description "A simple consent form"
	set decline_text "Nie biorę udziału!"
	set decline_message "Musisz zaakceptować formularz zgody, aby wziąć udział w badaniu!"
	set cols "2;2"
	set checkbox_text "Zapoznałem/am się z powyższymi informacjami i je rozumiem."
	set accept_text "Biorę udział!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_multiple_choice form_sex
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Mężczyzna
	Kobieta
	Inne
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Podaj swoją płeć:"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define keyboard_response introduction_start_keypress
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad num_1
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num1]" x=0 y=0 z_index=0

define sketchpad num_2
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num2]" x=0 y=0 z_index=0

define sketchpad num_3
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num3]" x=0 y=0 z_index=0

define sketchpad num_4
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num4]" x=0 y=0 z_index=0

define sketchpad num_5
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num5]" x=0 y=0 z_index=0

define sketchpad num_6
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num6]" x=0 y=0 z_index=0

define sketchpad num_7
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num7]" x=0 y=0 z_index=0

define sketchpad num_8
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num8]" x=0 y=0 z_index=0

define sketchpad practice_information
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Część 1: praktyka<br /></br><br />W celu zaznajomienia się z procedurą badania <br />przejdziesz przez krótki etap przygotowania.<br />Udzielone odpowiedzi, nie będą częścią wyników.<br /><br /><br /></br><br /></br><br />Naciśnij SPACJA, aby rozpocząć.<br />" x=0 y=0 z_index=0

define loop practice_loop
	set source_file "practiceTrial.csv"
	set source file
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run Trial_sequence

define keyboard_response practice_start_keypress
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

