---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Digit span experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "E:/Programming/Projects/digit-span-experiment"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define form_text_input Answer
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Spróbuj odpamiętać wyświetlone cyfry"
	set form_question "Zapisz cyfry w wyświetlonej kolejności. Następnie naciśnij ENTER aby kontynuować"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input Answer_1
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Spróbuj odpamiętać wyświetlone cyfry"
	set form_question "Zapisz cyfry w wyświetlonej kolejności. Następnie naciśnij ENTER aby kontynuować"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input Answer_1_1
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Spróbuj odpamiętać wyświetlone cyfry"
	set form_question "Zapisz cyfry w wyświetlonej kolejności. Następnie naciśnij ENTER aby kontynuować"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_input Answer_1_2
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Spróbuj odpamiętać wyświetlone cyfry"
	set form_question "Zapisz cyfry w wyświetlonej kolejności. Następnie naciśnij ENTER aby kontynuować"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define loop Block_one_digit
	set source_file "practiceSet.xlsx"
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 num1 4
	setcycle 0 num2 7
	setcycle 0 num3 1
	setcycle 0 num4 8
	setcycle 0 num5 4
	setcycle 0 num6 9
	setcycle 0 num7 2
	setcycle 0 num8 5
	setcycle 0 num9 6
	setcycle 0 num10 9
	setcycle 0 num11 5
	setcycle 0 num12 2
	setcycle 0 num13 6
	setcycle 0 num14 1
	setcycle 0 num15 1
	setcycle 0 num16 6
	setcycle 0 num17 2
	setcycle 0 num18 8
	setcycle 0 num19 6
	setcycle 0 num20 3
	setcycle 0 num21 4
	setcycle 0 num22 4
	setcycle 0 num23 3
	setcycle 0 num24 0
	setcycle 0 num25 7
	setcycle 0 num26 5
	setcycle 0 num27 8
	setcycle 0 num28 1
	setcycle 0 num29 3
	run Trials_practice

define loop Block_tree_digits
	set source_file "practiceSet.xlsx"
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 num1 213
	setcycle 0 num2 751
	setcycle 0 num3 407
	setcycle 0 num4 321
	setcycle 0 num5 982
	setcycle 0 num6 162
	setcycle 0 num7 549
	setcycle 0 num8 912
	setcycle 0 num9 145
	setcycle 0 num10 722
	setcycle 0 num11 847
	setcycle 0 num12 309
	setcycle 0 num13 261
	setcycle 0 num14 629
	setcycle 0 num15 106
	setcycle 0 num16 390
	setcycle 0 num17 395
	setcycle 0 num18 428
	run Trial_sequence_2_2

define loop Block_two_digits
	set source_file "practiceSet.xlsx"
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 num1 53
	setcycle 0 num2 21
	setcycle 0 num3 75
	setcycle 0 num4 40
	setcycle 0 num5 61
	setcycle 0 num6 33
	setcycle 0 num7 85
	setcycle 0 num8 92
	setcycle 0 num9 23
	setcycle 0 num10 82
	setcycle 0 num11 38
	setcycle 0 num12 68
	setcycle 0 num13 51
	setcycle 0 num14 69
	setcycle 0 num15 24
	setcycle 0 num16 55
	setcycle 0 num17 17
	setcycle 0 num18 32
	setcycle 0 num19 46
	setcycle 0 num20 12
	setcycle 0 num21 96
	setcycle 0 num22 28
	run Trial_sequence_2

define sketchpad ISI1
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI1_1
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI1_1_1
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI1_1_2
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI2
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI2_1
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI2_1_1
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI2_1_2
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI3
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI3_1
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI3_1_1
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI3_1_2
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI4
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI4_1
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI4_1_1
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI4_1_2
	set duration 445
	set description "Displays stimuli"

define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text DALEJ
	set margins "50;50;50;50"
	set form_title Title
	__form_text__
	Szanowny uczestniku,
	Zapraszamy do udziału w naszym badaniu naukowym dotyczącym pojemności pamięci roboczej.
	
	Jeśli zdecydujesz się wziąc udział, zostaniesz poproszony o wykonanie serii zadań polegających na odpamiętaniu wyświetlonych cyfr/liczb. Całe badanie powinno zająć około 15 minut. 
	
	Odpowiedzi zostaną zachowane w tajemnicy. Informujemy jednocześnie, że tożsamość uczestników nie jest zapisywana.
	
	Dostęp do wyników, będzie miał tylko zespół badawczy, a dane zebrane podczas badania zostaną wykorzystane w ramach pisania artykułu naukowego, który jest częścią pracy zaliczeniowej. Artykuł nie zostanie opublikowany w żadnym czasopiśmie.
	
	W razie jakichkolwiek pytań lub wątpliwości dotyczących badania, prosimy o kontakt z nami pod adresem: jakubkarp.kontakt@gmail.com.
	
	Dziękujemy za rozważnie udziału w naszym badaniu.
	
	Z poważaniem,
	
	zespół badawczy.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad Intro
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="W tym eksperymencie wyświetlane będą cyfry/liczby.<br /></br><br />Twoim zadaniem będzie zapamiętanie ich w wyświetlanej kolejności.<br />Po wpisaniu naciśnij ENTER, aby zatwierdzić i kontynuować.<br /></br><br /></br><br />Naciśnij SPACJA, aby rozpocząć.<br />" x=0 y=0 z_index=0

define keyboard_response NEXT_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define keyboard_response NEXT_2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define keyboard_response NEXT_3
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define sketchpad Next
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the SPACE BAR when you're ready<br/>to continue to the next sequence of numbers" x=0 y=0 z_index=0

define sketchpad Recall
	set reset_variables no
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Recall..." x=0 y=0 z_index=0

define keyboard_response SPACE_BAR
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define keyboard_response SPACE_BAR_2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define sequence Trial_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run num1_1 always
	run ISI1_1 always
	run num2_1 always
	run ISI2_1 always
	run num3_1 always
	run ISI3_1 always
	run num4_1 always
	run ISI4_1 always
	run fixation_1 always
	run Answer_1 always
	run logger_2 always

define sequence Trial_sequence_2_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run num1_1_1 always
	run ISI1_1_1 always
	run num2_1_1 always
	run ISI2_1_1 always
	run num3_1_1 always
	run ISI3_1_1 always
	run num4_1_1 always
	run ISI4_1_1 always
	run fixation_1_1 always
	run Answer_1_1 always
	run logger_2_1 always

define sequence Trial_sequence_2_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run num1_1_2 always
	run ISI1_1_2 always
	run num2_1_2 always
	run ISI2_1_2 always
	run num3_1_2 always
	run ISI3_1_2 always
	run num4_1_2 always
	run ISI4_1_2 always
	run fixation_1_2 always
	run Answer_1_2 always
	run logger_2_2 always

define sequence Trials_experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Block_one_digit always
	run Block_two_digits always
	run Block_tree_digits always
	run new_logger always

define sequence Trials_practice
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_loop always
	run feedback always

define sketchpad Welcome
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Szanowny uczestniku,</br><br />Zapraszamy do udziału w naszym badaniu naukowym<br />dotyczącym pojemności pamięci roboczej<br /><br />Jeśli zdecydujesz się wziąc udział, <br />zostaniesz poproszony o wykonanie serii zadań polegających na <br />odpamiętaniu wyświetlonych cyfr/liczb. <br />Całe badanie powinno zająć około 15 minut. </br><br /><br />Odpowiedzi zostaną zachowane w tajemnicy. Informujemy jednocześnie, że tożsamość uczestników nie jest zapisywana.</br><br /><br />Dostęp do wyników, będzie miał tylko zespół badawczy, <br />a dane zebrane podczas badania zostaną wykorzystane w ramach pisania artykułu naukowego, <br />który jest częścią pracy zaliczeniowej. <br />Artykuł nie zostanie opublikowany w żadnym czasopiśmie. </br><br /><br />W razie jakichkolwiek pytań lub wątpliwości dotyczących badania, prosimy o kontakt z nami pod adresem: jakubkarp.kontakt@gmail.com. </br><br /><br />Dziękujemy za rozważnie udziału w naszym badaniu.<br /><br />Z poważaniem,<br /><br />zespół badawczy. </br><br /><center>Nacisnij SPACJA aby kontynuować<br />" x=0 y=0 z_index=0

define loop block_loop
	set source_file "practiceTrial.xlsx"
	set source file
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 num1 2
	setcycle 0 num2 1
	setcycle 0 num3 3
	setcycle 0 num4 7
	setcycle 0 answer1 2137
	run trial_sequence

define form_text_display end_of_practice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Rozumiem!"
	set margins "50;50;50;50"
	set form_title "<span size=34>Instrukcje</span>"
	__form_text__
	Część przeznaczona na praktykę została zakończona.
	Jeżeli potrzebujesz ją potwórzyć, naciśnij "R".
	Aby kontynuować naciśnij "Rozumiem!".
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions always
	run form_consent always
	run Intro always
	run NEXT_1 always
	run practice_information always
	run NEXT_2 always
	run practice_loop always
	run end_of_practice always
	run stage_2 always
	run NEXT_3 always
	run experimental_loop always

define loop experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run Trials_experiment

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=always text="Koniec części treningowej.<br /><br />Twój średni czas odpowiedzi wyniósł [avg_rt] milisekund.<br /><br />Twoja poprawność wyniosła [acc] %<br /><br />Naciśnij dowolny przycisk aby kontynuować" x=-6 y=-5 z_index=0

define feedback feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=32 html=yes show_if=always text="Koniec części treningowej.<br /><br />Twój średni czas odpowiedzi wyniósł [avg_rt] milisekund.<br /><br />Twoja poprawność wyniosła [acc] %<br /><br />Naciśnij dowolny przycisk aby kontynuować" x=-6 y=-5 z_index=0

define sketchpad fixation
	set duration 745
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1
	set duration 745
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_1
	set duration 745
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_1_2
	set duration 745
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define form_consent form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "<span size=24>Zgoda</span>"
	__form_text__
	Zaraz rozpoczniesz serię krótkich testów.
	
	Ten eksperyment nie niesie ze sobą znanego ryzyka dla Twojego zdrowia.
	Dostęp do wyników, będzie miał tylko zespół badawczy, a dane zebrane podczas badania zostaną wykorzystane w ramach pisania artykułu naukowego, który jest częścią pracy zaliczeniowej. 
	Artykuł nie zostanie opublikowany w żadnym czasopiśmie.
	
	Po zakończeniu Twojego udziału w badaniu, poprosimy o wypełnienie metryczki zawierającej jedynie twój wiek oraz płeć. Otrzymasz także krótkie wyjaśnienie problemu, które to badanie porusza.
	
	Możesz przerwać udział w eksperymencie w dowolnym momencie, jeśli poczujesz się nieswojo.
	__end__
	set description "A simple consent form"
	set decline_text "Nie biorę udziału!"
	set decline_message "Musisz zaakceptować formularz zgody, aby wziąć udział w badaniu!"
	set cols "2;2"
	set checkbox_text "Zapoznałem/am się z powyższymi informacjami i je rozumiem."
	set accept_text "Biorę udział!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_text_display instructions_1
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Rozumiem!"
	set margins "50;50;50;50"
	set form_title "<span size=34>Instrukcje</span>"
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response keyboard_response
	set timeout 10000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "0;1;2;3;4;5;6;7;8;9;"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define logger logger_2
	set description "Logs experimental data"
	set auto_log yes

define logger logger_2_1
	set description "Logs experimental data"
	set auto_log yes

define logger logger_2_2
	set description "Logs experimental data"
	set auto_log yes

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title end_of_experiment
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sketchpad num1
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num1]" x=0 y=0 z_index=0

define sketchpad num1_1
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num1]" x=0 y=0 z_index=0

define sketchpad num1_1_1
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num1]" x=0 y=0 z_index=0

define sketchpad num1_1_2
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num1]" x=0 y=0 z_index=0

define sketchpad num2
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num2]<br />" x=0 y=0 z_index=0

define sketchpad num2_1
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num2]<br />" x=0 y=0 z_index=0

define sketchpad num2_1_1
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num2]<br />" x=0 y=0 z_index=0

define sketchpad num2_1_2
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num2]<br />" x=0 y=0 z_index=0

define sketchpad num3
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num3]<br />" x=0 y=0 z_index=0

define sketchpad num3_1
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num3]<br />" x=0 y=0 z_index=0

define sketchpad num3_1_1
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num3]<br />" x=0 y=0 z_index=0

define sketchpad num3_1_2
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num3]<br />" x=0 y=0 z_index=0

define sketchpad num4
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num4]<br />" x=0 y=0 z_index=0

define sketchpad num4_1
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num4]<br />" x=0 y=0 z_index=0

define sketchpad num4_1_1
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num4]<br />" x=0 y=0 z_index=0

define sketchpad num4_1_2
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[num4]<br />" x=0 y=0 z_index=0

define sketchpad practice_information
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Część 1/4: praktyka<br /></br><br />W celu zaznajomienia się z procedurą badania <br />przejdziesz przez krótki etap przygotowania.<br />Udzielone odpowiedzi, nie będą częścią wyników.<br /><br /><br /></br><br /></br><br />Naciśnij SPACJA, aby rozpocząć.<br />" x=0 y=0 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run Trials_practice

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad stage_2
	set reset_variables no
	set duration 0
	set description "Część 2/4 - Odpamiętywanie cyfr"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Część 2/4: cyfry<br /></br><br />Od teraz, odpowiedzi są częścią badania, <br />a wyniki będą zapisywane<br /><br /><br /></br><br /></br><br />Naciśnij SPACJA, aby rozpocząć.<br />" x=0 y=0 z_index=0

define loop testowanie
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run num1 always
	run ISI1 always
	run num2 always
	run ISI2 always
	run num3 always
	run ISI3 always
	run num4 always
	run ISI4 always
	run fixation always
	run Answer always
	run logger always

