---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Digit Span"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "E:/Programming/Projects/digit-span-experiment"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define form_text_input Answer
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Spróbuj odpamiętać wyświetlone cyfry"
	set form_question "Zapisz cyfry w wyświetlonej kolejności. Następnie naciśnij ENTER aby kontynuować"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad ISI_1
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_2
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_3
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_4
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_5
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_6
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_7
	set duration 445
	set description "Displays stimuli"

define sketchpad ISI_8
	set duration 445
	set description "Displays stimuli"

define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text DALEJ
	set margins "50;50;50;50"
	set form_title "Szanowny Uczestniku,"
	__form_text__
	
	Zapraszamy do udziału w badaniu. Zbadamy w nim pojemność Twojej pamięci roboczej.
	
	Badanie jest w pełni anonimowe. 
	Dostęp do wyników, będzie miał tylko zespół badawczy, a dane zebrane podczas badania zostaną wykorzystane w artykule naukowym, który jest częścią pracy zaliczeniowej.
	
	
	Dziękujemy za udział w badaniu.
	
	Z poważaniem,
	zespół badawczy.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad Intro
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="W tym eksperymencie wyświetlane będą cyfry/liczby.<br /></br><br />Twoim zadaniem będzie zapamiętanie ich w wyświetlanej kolejności.<br />Po wpisaniu naciśnij ENTER, aby zatwierdzić i kontynuować.<br /></br><br /></br><br />Naciśnij SPACJA, aby rozpocząć.<br />" x=0 y=0 z_index=0

define sequence Trial_sequence
	set flush_keyboard yes
	set duration "4000}"
	set description "Runs a number of items in sequence"
	run num_1 always
	run ISI_1 always
	run num_2 always
	run ISI_2 always
	run num_3 always
	run ISI_3 always
	run num_4 always
	run ISI_4 always
	run num_5 "[num5] = 1"
	run ISI_5 "[num5] = 1"
	run num_6 "[num6] = 1"
	run ISI_6 "[num6] = 1"
	run num_7 "[num7] = 1"
	run ISI_7 "[num7] = 1"
	run num_8 "[num8] = 1"
	run ISI_8 "[num8] = 1"
	run Answer always
	run logger always

define sketchpad end_of_experiment
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="<strong>Dziękujemy za udział w badaniu!</strong><br /></br><br /><br />Naciśnij dowolny klawisz, aby zakończyć.<br /><br />Jeżeli przycisk nie zostanie naciśnięty,<br /> eksperyment zakończy się samoistnie za 10 sekund." x=0 y=0 z_index=0

define keyboard_response end_of_experiment_keypress
	set timeout 10000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define keyboard_response end_of_experiment_keypress_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define sketchpad end_of_practice
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Koniec sekwencji testowej<br /></br><br /><br /><br /></br><br /></br><br />Naciśnij SPACJA, aby rozpocząć." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions always
	run instructions_part2 always
	run form_start always
	run form_age always
	run form_sex always
	run Intro always
	run introduction_start_keypress always
	run practice_information always
	run practice_start_keypress always
	run practice_loop always
	run end_of_practice always
	run experiment_information always
	run experiment_start_keypress always
	run experiment_loop always
	run experiment_explanation always
	run end_of_experiment_keypress_1 always
	run end_of_experiment always
	run end_of_experiment_keypress always

define sketchpad experiment_explanation
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Przeprowadzone badanie jest repliką eksperymentu magiczna liczba George'a Millera.<br />Eksperyment miał na celu okreśelenie liczby elementów, <br />które ludzie mogą zapamiętać w pamięci krótkotrwałej.<br />Miller twierdził, że średnia pojemność pamięci krótkotrwałej <br />wynosi około 7 elementów, plus-minus 2.<br /></br><br /><br /><br />Naciśnij dowolny klawisz, aby przejść do zakończenia<br />" x=0 y=0 z_index=0

define sketchpad experiment_information
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Część 2: część badawcza<br /></br><br />Udzielone odpowiedzi, będą częścią wyników.<br /><br /><br /></br><br /></br><br />Naciśnij SPACJA, aby rozpocząć." x=0 y=0 z_index=0

define loop experiment_loop
	set source_file "expTrial.csv"
	set source file
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run Trial_sequence

define keyboard_response experiment_start_keypress
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define form_multiple_choice form_age
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	18-23
	24-27
	28-32
	32-36
	37-41
	41+
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Wybierz swój przedział wiekowy"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define form_consent form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "<span size=24>Zanim przystąpisz do badania, zapoznaj się z krótką instrukcją.</span>"
	__form_text__
	Całe badanie powinno zająć około 8 minut. 
	
	
	Wypełnij metryczkę - zaznacz swój wiek oraz płeć.
	Po wypełnieniu metryczki, przejdziesz do części testowej, w której zaprezentowane zostaną ciągi cyfr/liczb.
	Twoim zadaniem będzie odpamiętanie wyświetlonych cyfr/liczb w odpowiedniej kolejności i zapisanie ich w odpowiednim miejscu.
	Czas na podanie odpowiedzi będzie nieograniczony.
	
	Po części testowej zostaniesz przekierowany do właściwej części eksperymentu.
	__end__
	set description "A simple consent form"
	set decline_text "Nie biorę udziału!"
	set decline_message "Musisz zaakceptować formularz zgody, aby wziąć udział w badaniu!"
	set cols "2;2"
	set checkbox_text "Zapoznałem/am się z powyższymi informacjami i je rozumiem."
	set accept_text "Biorę udział!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_multiple_choice form_sex
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Mężczyzna
	Kobieta
	Inne
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Podaj swoją płeć:"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define form_consent form_start
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Zgoda na udział w badaniu."
	__form_text__
	Po zakończeniu badania otrzymasz także krótkie wyjaśnienie problemu, które to badanie porusza.
	Możesz przerwać udział w eksperymencie w dowolnym momencie klikając "ESC" na klawiaturze lub zamykając okno w przeglądarce.
	
	Zgadzając się na udział, deklarujesz uczciwy udział w badaniu, który pozwoli na uzyskanie rzetelnych wyników.
	__end__
	set description "A simple consent form"
	set decline_text "Nie biorę udziału!"
	set decline_message "Musisz zaakceptować formularz zgody, aby wziąć udział w badaniu!"
	set cols "2;2"
	set checkbox_text "Zapoznałem/am się z powyższymi informacjami i je rozumiem."
	set accept_text "Biorę udział!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_text_display instructions_part2
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Zanim przystąpisz do badania, zapoznaj się z krótką instrukcją.</span>"
	__form_text__
	Całe badanie powinno zająć około 8 minut. 
	
	
	Wypełnij metryczkę - zaznacz swój wiek oraz płeć.
	Po wypełnieniu metryczki, przejdziesz do części testowej, w której zaprezentowane zostaną ciągi cyfr/liczb.
	
	Twoim zadaniem będzie odpamiętanie wyświetlonych cyfr/liczb w odpowiedniej kolejności i zapisanie ich w odpowiednim miejscu.
	
	Czas na podanie odpowiedzi będzie nieograniczony.
	
	Po części testowej zostaniesz przekierowany do właściwej części eksperymentu.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response introduction_start_keypress
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log acc
	log accept_status
	log accuracy
	log average_response_time
	log avg_rt
	log block
	log checkbox_status
	log correct
	log correct_response
	log count_Answer
	log count_Instructions
	log count_Intro
	log count_Trial_sequence
	log count_experiment
	log count_experiment_explanation
	log count_experiment_information
	log count_experiment_loop
	log count_form_age
	log count_form_consent
	log count_form_sex
	log count_logger
	log count_num_1
	log count_num_2
	log count_num_3
	log count_num_4
	log count_num_5
	log count_num_6
	log count_num_7
	log count_num_8
	log count_practice_loop
	log description
	log datetime
	log disable_garbage_collection
	log display_time
	log experiment_file
	log experiment_path
	log fullscreen
	log height
	log keyboard_backend
	log logfile
	log live_row
	log live_row_experiment_loop
	log live_row_practice_loop
	log num1
	log num2
	log num3
	log num4
	log num5
	log num6
	log num7
	log num8
	log num_of_digits
	log opensesame_codename
	log opensesame_version
	log repeat_cycle
	log response
	log response_time
	log start
	log subject_nr
	log time_ISI_1
	log time_ISI_2
	log time_ISI_3
	log time_ISI_4
	log time_ISI_5
	log time_ISI_6
	log time_ISI_7
	log time_ISI_8
	log time_experiment
	log time_end_of_practice
	log time_Trial_sequence
	log time_Intro
	log time_Instructions
	log time_logger
	log time_num_1
	log time_num_2
	log time_num_3
	log time_num_4
	log time_num_5
	log time_num_6
	log time_num_7
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
define sketchpad num_1
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num1]" x=0 y=0 z_index=0

define sketchpad num_2
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num2]" x=0 y=0 z_index=0

define sketchpad num_3
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num3]" x=0 y=0 z_index=0

define sketchpad num_4
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num4]" x=0 y=0 z_index=0

define sketchpad num_5
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num5]" x=0 y=0 z_index=0

define sketchpad num_6
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num6]" x=0 y=0 z_index=0

define sketchpad num_7
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num7]" x=0 y=0 z_index=0

define sketchpad num_8
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=76 html=yes show_if=always text="[num8]" x=0 y=0 z_index=0

define sketchpad practice_information
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Część 1: praktyka<br /></br><br />W celu zaznajomienia się z procedurą badania <br />przejdziesz przez krótki etap przygotowania.<br />Udzielone odpowiedzi, nie będą częścią wyników.<br /><br /><br /></br><br /></br><br />Naciśnij SPACJA, aby rozpocząć.<br />" x=0 y=0 z_index=0

define loop practice_loop
	set source_file "practiceTrial.csv"
	set source file
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run Trial_sequence

define keyboard_response practice_start_keypress
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

